;avance-version (12/01/11)
;4D_CCR_2_N1Hn1_Ca1Ha1.azk
;coherence transfer:
;
;      F1(H) -> F3(N) -> F2(C=O, CA i, CA i-1) -> F2(CO, CAi) -> CCR with CA evol T1 ->
;            -> F2(C=O,T2) -> F3(N,T3) -> F1(H,T4)
;
;experiment should be run in reference (l0=0) and cross (l0=1) versions
;CCR evolution time: Tc=28.6 ms
;on/off resonance Ca, C=O and HN pulses using shaped pulses: call getprosol and then "wvm -al"
;cnst18 and cnst19 are specific to a given protein, so they should be set to affect only HA and not HN (otherwise, the CCR evolution will be different than we assume)
;CA evolution: constant time during CCR block, tmax1 cannot exceed maxtmax1
;CO evolution: constant time or semi-constant time (mode chosen automatically based on tmax2)
;N evolution: constant time mode. tmax3 cannot exceed maxtmax3
;phase sensitive using Echo/Antiecho gradient selection (T3)
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<triple>

#include <Avance.incl>
#include <Grad.incl>
#include <CCR_Params.incl> 
; inlude edithed by Paulina Bartosinska-Marzec at 17.01.2024
"d11=30m"
"d13=4u"
"d16=200u"
"p16=0.5m"  ;gradient pulse

; Set up chemical shift evolution times:
"in1 = inf1"
"in2 = inf2"
"in3 = inf3"

define delay T1
"T1 = 0"
define delay T2
"T2 = 0"
define delay T3
"T3 = 0"

define delay tmax1
"tmax1 = td1*in1/2"
define delay tmax2
"tmax2 = td2*in2/2"  
define delay tmax3
"tmax3 = td3*in3/2"

"spoff4 = bf2*((cnst22 - cnst23)/1000000)"  ; CO with offset on CA/CO middle.
"spoff6 = spoff4"


define delay Tc
"Tc=28.6m"

; First INEPT Hz -> HzNz
define delay DELTA11
"DELTA11 = timeHN/2 - p16 - d16"

; Second INEPT HzNz -> COzCAzNzCAz
define delay DELTA21
define delay DELTA22
define delay DELTA23
define delay DELTA24
"DELTA21 = timeNH"  ; H refocusing delay in second INEPT
"DELTA22 = timeNCO_norelax/2 - DELTA21 - p1 - d13*2"    
"DELTA23 = timeNCACA/2 - timeNCO_norelax/2 - p14"
"DELTA24 = timeNCACA/2"


; COS-INEPT pulse train:
define delay DELTANandH
define delay DELTAHN1
define delay DELTAHN2
"DELTANandH = timeNandH/2 - p16 - d16"
"DELTAHN1 = timeHN/2 - p16 - d16 - p21"
"DELTAHN2 = timeHN/2 - p16 - d16"

define delay ECHOCOMP
"ECHOCOMP = p21*4/PI"

define delay ECHOTIME
"ECHOTIME = p16 + d16 + de - p1*2/PI"   ; Compensated for de and last pulse.

; ***** Run-time-calculated delays: *****

define delay T2aN
define delay T2aCA
define delay T2b
define delay T2c

define delay T3a
define delay T3aCO
define delay T3c

define delay tauA
define delay tauB

define delay maxtmax1
"maxtmax1=Tc-p14*4-(p16+d16)*8"

define delay maxtmax3
"maxtmax3=timeNCACA"

 "acqt0 = 0"
 baseopt_echo


; ***** Beginning of the pulse sequence *****

1 ze

2 d11  ; Start of loop.
; ***** Run-time calculations: *****
    "tauA = (Tc+T1)/4"
    "tauB = (Tc-T1)/4"

    "T2aN = T2/2"
    "T2aCA = timeCOCA/2 - p22"    ;p22- lenth of N pulse
    "if (tmax2 <= timeCOCA) {T2b = 0.0;} else {T2b = T2*(1 - timeCOCA/tmax2)/2;}"
    "if (tmax2 <= timeCOCA) {T2c = (timeCOCA - T2)/2;} else {T2c = timeCOCA*(1 - T2/tmax2)/2;}"

    "T3a = timeNCACA/2 + T3/2"
    "T3aCO = T3/2 + (timeNCO_norelax -p14)/2"
    "T3c = timeNCACA/2 - T3/2"

    

    if "tmax1 >= maxtmax1" goto 999
    if "tmax3 >= maxtmax3" goto 999

    
    
    d1 fq=cnst23(bf ppm):f2 ; f2 to CA/CO middle

    d13 UNBLKGRAD   ; Unblank gradient amplifier and hold lock.

    ; Crush non-proton polarization:
    (p3 pl2 ph0):f2
    (p21 pl3 ph0):f3
    p16:gp0
    d16

    (p3 pl2 ph1):f2
    (p21 pl3 ph1):f3
    p16:gp0
    d16 fq=cnst21(bf ppm):f2    ; Switch f2 to CA.
    
; Hz -> HzNz:
    (p1 pl1 ph0):f1
    DELTA11
    p16:gp10
    d16
    (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
    DELTA11
    p16:gp10
    d16
    (p1 pl1 ph1):f1
    (p11:sp1 ph0):f1    ; Water flipback.
    
    d13
    p16:gp1
    d16

; HzNz -> COz(i-1)CAz(i-1)Nz(i)CAz(i):
    (p21 pl3 ph0):f3
    DELTA21
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1
    DELTA22         ;DELAY ok 11.1 (16.5-5.4)
    (p14:sp7 ph0):f2    ;impuls 180 CO
    DELTA23        ;delay
    (center (p14:sp3 ph0):f2 (p22 pl3 ph0):f3)
    DELTA24         ;delay 25m
    (p21 pl3 ph0):f3

; Decoupler OFF/ON and gradient. 
    d13 do:f1
    (p1 pl1 ph3):f1
    d13 fq=cnst23(bf ppm):f2    ; Switch f2 to CA/CO middle.
    p16:gp2
    d16
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1

; COz(i-1)CAz(i-1)Nz(i)CAz(i) -> COz(i-1)Nz(i)CAz(i) :
    
    (p13:sp4 ph0):f2 ;dobrze ustawic offset tego impulsu
    timeCOCA*0.5
       (shaka1 pl2 ph0):f2 
       (shaka2 pl2 ph2):f2
       (shaka3 pl2 ph0):f2
       (shaka4 pl2 ph2):f2
       (shaka5 pl2 ph0):f2
       (shaka6 pl2 ph2):f2
    timeCOCA*0.5
    (p13:sp6 ph1):f2 ;dobrze ustawic offset tego impulsu



; Decoupler OFF and gradient.
    d13 do:f1
    (p1 pl1 ph3):f1
    (d13 fq=cnst21(bf ppm)):f2 ; Switch f2 to CA.
    p16:gp3
    d16


; CCR block with CA evol (T1) -> 'a': CAzCOzNzHz, 'x': CAzCOzNzHzHAz

    (ralign (p21 pl3 ph0):f3 (p13:sp2 ph11):f2)            ;simultaneous pulses 90xN, 90xCA
    (center (tauA) (p14:sp7 ph0):f2)                ;tauA with CO 180x in the middle
    (center (p22 pl3 ph0):f3 (p42:sp26 ph0):f1)            ; simultaneous pulses 180xN, 180xHA sel
    (                                ;tauA with CO 180x in the middle and grad left 
    refalign ( tauA )
    lalign ( p16:gp4 d16 )
    center (p14:sp7 ph0):f2
    )
    (center (p14:sp3 ph10):f2 (p22 pl3 ph0):f3)      ; simultaneous pulses 180xCA, 180xN
    (                                ;tauB with CO 180x in the middle and grad right 
    refalign ( tauB )
    ralign ( p16:gp4 d16 )
    center (p14:sp7 ph0):f2
    )
    (center (p22 pl3 ph0):f3 (p42:sp26 ph0):f1)            ;simultaneous pulses 180xN, 180xHA sel
    (center (tauB) (p14:sp7 ph0):f2)             ;tauB with CO 180x in the middle 
    if (l0==0)                          ;simultaneous pulses 90(fi)N, 90(fi)CA
    {
    (lalign (p21 pl3 ph0):f3 (p13:sp8 ph0):f2)        ;N & CA 90 - auto version
    }
    if (l0==1)
    {
    (lalign (p21 pl3 ph1):f3 (p13:sp8 ph1):f2)        ;N & CA 90 - cross version
    }


    d13
    p16:gp5
    d16

; COzNz[Hz]CAz[HAz] -> COzNzCAz[HAz]

       if (l0==0)
    {
        (p21 pl3 ph0):f3
        timeNH*0.5
        (p22 pl3 ph0):f3
        timeNH*0.5
        (p21 pl3 ph0):f3

         }
    if (l0==1)
    {
        (p21 pl3 ph0):f3
        timeNH*0.5
        (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
        timeNH*0.5
        (p21 pl3 ph1):f3

    }
    
        d13
    p16:gp6
    d16

; COzNzCAz(HAz) -> COzNzCAz

    if (l0==0)
    {
    (p13:sp2 ph0):f2
    timeCaHa*0.5
    (p14:sp3 ph0):f2
    timeCaHa*0.5
    (p13:sp8 ph0):f2

    }
    if (l0==1)
    {
    (p13:sp2 ph0):f2
    timeCaHa*0.5
    (center (p2 pl1 ph0):f1 (p14:sp3 ph0):f2)
    timeCaHa*0.5
    (p13:sp8 ph1):f2
    }


       (d13 fq=cnst22(bf ppm)):f2 ; Switch f2 to CO
p16:gp7
    d16


; Decoupler ON
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1 

; CAz(i)COz(i-1)Nz -> COz(i-1)CAz(i-1)Nz(i)CAz(i) + evol CO (T2)
    (p13:sp2 ph12):f2    ;impuls90xCO
    T2aN            ;delay zmienny (t/2)
    (p22 pl3 ph0):f3     ;impuls180xN
    T2aCA            ;delay (a-t/2)
    (p14:sp5 ph0):f2    ;impuls 180xCA
    T2b            ;delay (b)
    (p14:sp3 ph0):f2     ;impuls 180xCO
    T2c            ;delay (c)
    (p14:sp5 ph0):f2    ;impuls 180xCA
(p13:sp8 ph1):f2    ;impuls 90xCO
    

; Decoupler OFF/ON and gradient.
    d13 do:f1
    (p1 pl1 ph3):f1 
    p16:gp8
    d16
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1

; COz(i-1)CAz(i-1)Nz(i)CAz(i)  -> HzNz + HzNx with N evolution (T3):
    (p21 pl3 ph21):f3
    T3c
    (center (p14:sp5 ph0):f2 (p22 pl3 ph0):f3 ) 
    (
    ralign
    ( p14:sp3 ph0 T3aCO):f2
    ( d13 do p1 pl1 ph3 timeNH):f1
    ( p16:gp21*EA d16):f3
    (T3a)
    )
    (p21 pl3 ph0):f3

    
; COS-INEPT:
    ECHOCOMP
    (p1 pl1 ph0):f1
    p16:gp11
    d16
    DELTANandH
    (center (p2 pl1 ph2):f1 (p22 pl3 ph0):f3)
    DELTANandH
    p16:gp11
    d16
    
    (p1 pl1 ph1):f1
    (p21 pl3 ph13):f3   ; E/A selecting pulse.
    p16:gp12
    d16
    DELTAHN1
    (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
    DELTAHN2
    p16:gp12
    d16

    (p1 pl1 ph0):f1
    ECHOTIME
    (p2 pl1 ph2):f1
    p16:gp22    ; Coherence selection gradient.
    
    d16 pl16:f3 BLKGRAD  ; Set power for decoupling, blank gradient amplifier and sample lock.

go=2 ph31 cpd3:f3 finally do:f3
d11 mc #0 to 2
    F1PH(calph(ph11,+90), caldel(T1, +in1))
    F2PH(calph(ph12,+90), caldel(T2, +in2))
    F3EA(calph(ph13,+180) & calgrad(EA), caldel(T3, +in3) & calph(ph21, +180) & calph(ph31, +180))
    
999 exit



; Constant phases:
ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3

; Phases incremented for indirect dimensions:
ph11 = 0 2
ph12 = 0 0 2 2
ph10 = 0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3

ph13 = 3

; Phase at start of INEPT before COS-INEPT - for TPPI shifting in T3:
ph21 = 0

; Receiver phase:
ph31 = 0 2 2 0 2 0 0 2


;cnst19: HA offset in ppm [4.3]
;cnst18: HA bandwidth in ppm [3.0]

;sp26:wvm: reburp(cnst18 ppm, cnst19 ppm)

;l0: flag for auto (0) and cross (1) versions of the experiment



