;avance-version (12/01/11)
;4D_CCR_3_N0Hn0_N1Hn1.azk
;coherence transfer:
;
;  	F1(HAi-1) -> F2(CAi-1) -> F3(Ni,Ni-1) -> CCR -> F2(CAi-1, T1) -> F2(C=O i-1,T2) -> F3(Ni,T3) -> F1(Hi,T4)

; zgoptns:
; -DPURGE: purge water magnetization using B1 and gradient pulses.

;experiment should be run in reference (l0=0) and cross (l0=1) versions
;CCR evolution time: d8
;on/off resonance Ca, C=O pulses using shaped pulses: call getprosol
;CA evolution: constant time, tmax1 cannot exceed maxtmax1
;CO evolution: constant time or semi-constant time (mode chosen automatically based on tmax2)
;N evolution: constant time or semi-constant time (mode chosen automatically based on tmax3) 
;phase sensitive using Echo/Antiecho gradient selection (T3)
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<triple>

#include <Avance.incl>
#include <Grad.incl>
#include <CCR_Params.incl>  
; inlude edithed by Paulina Bartosinska-Marzec at 17.01.2024
"d11=30m"
"d13=4u"
"d16=200u"
"p16=0.5m"  ;gradient pulse


; Set up chemical shift evolution times:
"in1 = inf1"
"in2 = inf2"
"in3 = inf3"

define delay T1
"T1 = 0"
define delay T2
"T2 = 0"
define delay T3
"T3 = 0"

define delay tmax1
"tmax1 = td1*in1/2"
define delay tmax2
"tmax2 = td2*in2/2"  
define delay tmax3
"tmax3 = td3*in3/2"

define delay Tc
"Tc=d8"
;d8: delay for CCR relaxation measurement [28 msec]

; First INEPT HAz -> HAzCAz
define delay DELTA11
"DELTA11 = timeCaHa/2 - p16 - d16"


; Second INEPT HAzCAz -> CAzNz(i)Nz(i-1)
define delay DELTA21
define delay DELTA22
define delay DELTA23
"DELTA21 = timeCaHa"  ; H refocusing delay in second INEPT
"DELTA22 = timeCANN/2 - DELTA21 - p1 - d13*2"	; Compensated for H 90 pulse.
"DELTA23 = timeCANN/2"

; CCR:
define delay DELTA_x
"DELTA_x = (timeNH)/4"


; COS-INEPT pulse train:
define delay DELTANandH
define delay DELTAHN1
define delay DELTAHN2
"DELTANandH = timeNandH/2 - p16 - d16"
"DELTAHN1 = timeHN/2 - p16 - d16 - p21"
"DELTAHN2 = timeHN/2 - p16 - d16"

define delay ECHOCOMP
"ECHOCOMP = p21*4/PI"

define delay ECHOTIME
"ECHOTIME = p16 + d16 + de - p1*2/PI"   ; Compensated for de and last pulse.

; ***** Run-time-calculated delays: *****

define delay T1aCO
define delay T1aCAN
define delay T1c

define delay T2aN
define delay T2aCA
define delay T2b
define delay T2c

define delay T3aCA
define delay T3aGRAD
define delay T3aCO
define delay T3b
define delay T3c

define delay tau
define delay tau_x

define delay maxtmax1
"maxtmax1=timeCANN-p14*2"

 "acqt0 = 0"
 baseopt_echo


; ***** Beginning of the pulse sequence *****

1 ze

2 d11  ; Start of loop.
; ***** Run-time calculations: *****
	"tau = Tc/4"
    "tau_x = Tc/4+p2"

	"T1aCO = T1/2+timeCACO_norelx/2"
	"T1aCAN = timeCANN/2-timeCACO_norelx/2-p14"
	"T1c = timeCANN/2-T1/2-p14"


;	"T2aCA = T2/2+timeCOCA/2"
;	"T2aN = timeCON/2-timeCOCA/2 - p22"	;p22 - N pulse
;	"T2b = T2*(1 - timeCON/tmax2)/2"
;	"if (tmax2 <= timeCON) {T2b = 0.0;}"
;	"T2c = timeCON*(1 - T2/tmax2)/2"    
;	"if (tmax2 <= timeCON) {T2c = (timeCON - T2)/2;}"
;
 ;   "T3aCA = T3/2"
;	"T3aCO = timeNCO/2 - p14"  ; Corrected for CA inversion pulse.
;    "T3aGRAD = 0"
;	"if (T3aCA < (p16+d16)) {T3aGRAD = T3aCA + p14;}"
;	"T3b = T3*(1 - timeNCO/tmax3)/2"
;	"if (tmax3 <= timeNCO) {T3b = 0;}"
;	"T3c = timeNCO*(1 - T3/tmax3)/2"
;	"if (tmax3 <= timeNCO) {T3c = (timeNCO - T3)/2;}"
;	"T3c += p14"	; Compensate for length of CO inversion pulse.

    "T2aCA = T2/2+timeCOCA/2"	
    "T2aN = timeCON/2-timeCOCA/2 - p22"	
    "if (tmax2 <= timeCON) {T2b = 0.0;} else {T2b = T2*(1 - timeCON/tmax2)/2;}"
    "if (tmax2 <= timeCON) {T2c = (timeCON - T2)/2;} else {T2c = timeCON*(1 - T2/tmax2)/2;}"

    "T3aCA = T3/2"
    "T3aCO = timeNCO/2 - p14"  ; Corrected for CA inversion pulse.
    "if (T3aCA < (p16+d16)) {T3aGRAD = T3aCA + p14;} else {T3aGRAD = 0;}"
    "if (tmax3 <= timeNCO) {T3b = 0;} else {T3b = T3*(1 - timeNCO/tmax3)/2;}"
    "if (tmax3 <= timeNCO) {T3c = (timeNCO - T3)/2 + p14;} else {T3c = timeNCO*(1 - T3/tmax3)/2 + p14;}"



	if "tmax1 >= maxtmax1" goto 999


    
	d1 fq=cnst23(bf ppm):f2 ; f2 to CA/CO middle

	d13 UNBLKGRAD   ; Unblank gradient amplifier and hold lock.

	; Crush non-proton polarization:
	(p3 pl2 ph0):f2
	(p21 pl3 ph0):f3
	p16:gp0
	d16

	(p3 pl2 ph1):f2
	(p21 pl3 ph1):f3
	p16:gp0
	d16 fq=cnst21(bf ppm):f2	; Switch f2 to CA.
    
; HAz -> HAzCAz:
	(p1 pl1 ph0):f1			;pulse 90x HA
	DELTA11			;timeCaHa/2
	p16:gp10
	d16
	(center (p2 pl1 ph0):f1 (p14:sp3 ph0):f2)		;together: 180xH, 180xCA
	DELTA11			;timeCaHa/2
	p16:gp10
	d16
	(p1 pl1 ph1):f1			;pulse 90yH
	
	p16:gp1
	d16


; HAz(i-1)CAz(i-1) -> CAz(i-1)N(i)N(i-1):
	(p13:sp2 ph0):f2		;pulse 90xCA
	DELTA21			;timeCaHa
	
	(d13 pl19):f1
	(d13 cpds1 ph1):f1		;decoupling +y without pulse before        
	DELTA22			;timeNCA/2-timeCaHa
	(center (p14:sp3 ph0):f2 (p22 pl3 ph0):f3)		;together: 180xCA, 180xN
	DELTA23			;timeNCA/2
	(p13:sp8 ph1):f2		;pulse 90xCA

; Decoupler OFF and gradient.
	d13 do:f1
	(p1 pl1 ph0):f1			;decoupling +y pulse 90+xH
	d13
#   ifdef PURGE
      (p17*4 ph0 pl10):f1
      (p17*2 ph1 pl10):f1
#   endif /*PURGE*/
	p16:gp2
	d16


; CCR block -> 'a': CAz(i)N(i-1)N(i), 'x': CAz(i)N(i-1)N(i)

    (p21 pl3 ph0):f3		;pulse 90xN
	tau       

	if (l0==0)
	{
	(p2 pl1 ph0):f1    ;180xH
	(
	refalign (tau) 
	lalign (p16:gp3 d16)
	)
    }

	if (l0==1)
	{
	(
	refalign (tau_x) 		
	lalign (p16:gp3 d16)
	lalign (DELTA_x p2 pl1 ph0):f1	; 
	)
	}

	(p22 pl3 ph10):f3		;pulse 180xN
	(
	refalign (tau) 
	ralign (p16:gp3 d16)
	)

	if (l0==0)
	{
	(p2 pl1 ph0):f1     ; 180xH
	tau
    }

	if (l0==1)
	{
	(
	refalign (tau_x)
	lalign (DELTA_x p2 pl1 ph0):f1	;
	)
	}

	(p21 pl3 ph0):f3		;pulse 90xN
;'a': CAz(i)N(i-1)N(i), 'x': CAz(i)N(i-1)N(i)

	d13
	p16:gp4
	d16

; Decoupler ON
	(p1 pl1 ph1):f1
	(d13 pl19):f1
	(d13 cpds1 ph0):f1

; CAz(i-1)N(i-1)N(i) -> CAz(i-1)COz(i-1) with CA evolution (T1):

	(p13:sp2 ph11):f2		;pulse 90xCA
	T1aCO				;timeCOCA/2+t/2
	(p14:sp7 ph0):f2		;pulse 180xCO
	T1aCAN			;timeNCA/2-timeCOCA/2
	(center (p14:sp3 ph0):f2 (p22 pl3 ph0):f3)		;together 180xCA, 180xN
	T1c				;timeNCA/2-t/2
	(p14:sp7 ph0):f2		;pulse 180xCO
	(p13:sp8 ph1):f2		;pulse 90yCA
    
    ; Decoupler OFF/ON and gradient.
    d13 do:f1
    (p1 pl1 ph3):f1 (d13 fq=cnst22(bf ppm)):f2 ; Switch f2 to CO
    p16:gp5
    d16
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1

; CAz(i-1)COz(i-1)-> COz(i-1)Nz(i) with CO evolution (T2):

	(p13:sp2 ph12):f2    	;pulse 90xCO
    	T2aCA            		;delay varied (t/2)
   	(p14:sp5 ph0):f2	;pulse 180xCA
    	T2aN           	 	;delay (a-t/2)
    	(p22 pl3 ph0):f3    	;pulse 180xN
   	T2b            		;delay (b)
    	(p14:sp3 ph0):f2     	;pulse 180xCO
    	T2c            		;delay (c)
    	(p14:sp5 ph0):f2    	;pulse 180xCA
	(p13:sp8 ph0):f2    	;pulse 90xCO


; Decoupler OFF/ON and gradient.
    d13 do:f1
	(p1 pl1 ph3):f1
	p16:gp6
	d16
	(p1 pl1 ph1):f1
	(d13 pl19):f1
	(d13 cpds1 ph0):f1


; COzNz -> HzNz with N evolution (T3):
	(p21 pl3 ph21):f3	;pulse 90xN
	T3c			;delay (c)
	(p22 pl3 ph0):f3	;pulse 180xN
	T3b
	(ralign
    	(d13 do p1 pl1 ph3 timeNH):f1
    	(p14:sp3 ph0 T3aCO p14:sp5 ph0 T3aCA):f2	;180xCO, delay aCO, 180xCA, delay aCA
    	(p16:gp21*EA d16 T3aGRAD):f3
	)
	(p21 pl3 ph0):f3	;pulse 90xN
	


; COS-INEPT:
	ECHOCOMP
	(p1 pl1 ph0):f1
	p16:gp11
	d16
	DELTANandH
	(center (p2 pl1 ph2):f1 (p22 pl3 ph0):f3)
	DELTANandH
	p16:gp11
	d16
    
	(p1 pl1 ph1):f1
	(p21 pl3 ph13):f3   ; E/A selecting pulse.
	p16:gp12
	d16
	DELTAHN1
	(center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
	DELTAHN2
	p16:gp12
	d16

	(p1 pl1 ph0):f1
	ECHOTIME
	(p2 pl1 ph2):f1
	p16:gp22	; Coherence selection gradient.
    
	d16 pl16:f3 BLKGRAD  ; Set power for decoupling, blank gradient amplifier and sample lock.

go=2 ph31 cpd3:f3 finally do:f3
d11 mc #0 to 2
	F1PH(calph(ph11,+90), caldel(T1, +in1))
	F2PH(calph(ph12,+90), caldel(T2, +in2))
	F3EA(calph(ph13,+180) & calgrad(EA), caldel(T3, +in3) & calph(ph21, +180) & calph(ph31, +180))
    
999 exit



; Constant phases:
ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3

; Phases incremented for indirect dimensions:
ph11 = 0 2
ph12 = 0 0 2 2
ph10 = 0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph13 = 3

; Phase at start of INEPT before COS-INEPT - for TPPI shifting in T3:
ph21 = 0

; Receiver phase:
ph31 = 0 2 2 0


;l0: flag for auto (0) and cross (1) versions of the experiment




