;avance-version (12/01/11)
;4D_CCR_4_Ha0Hn1_CO0.azk
;coherence transfer:
;
;      F1(H) -> F3(N) -> F2(C=O) -> F2(Ca,T1) -> CCR with CO evol T2 ->
;            -> F2(C=O) -> F3(N,T3) -> F1(H,T4)
;
;experiment should be run in reference (l0=0) and cross (l0=1) versions
;CCR evolution time: d8
;on/off resonance Ca, C=O and HN pulses using shaped pulses: call getprosol and then "wvm -al"
;cnst18 and cnst19 are specific to a given protein, so they should be set to affect only HN and not HA (otherwise, the CCR evolution will be different than we assume)
;CA evolution: real time
;CO evolution: constant time, tmax2 cannot exceed maxtmax2 evolution time = 17.6 ms
;N evolution: constant time or semi-constant time (mode chosen automatically based on tmax3)
;phase sensitive using Echo/Antiecho gradient selection (T3)
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<triple>

#include <Avance.incl>
#include <Grad.incl>
#include <CCR_Params.incl> 
; inlude edithed by Paulina Bartosinska-Marzec at 17.01.2024
"d11=30m"
"d13=4u"
"d16=200u"
"p16=0.5m"  ;gradient pulse

; Set up chemical shift evolution times:
"in1 = inf1"
"in2 = inf2"
"in3 = inf3"

define delay T1
"T1 = 0"
define delay T2
"T2 = 0"
define delay T3
"T3 = 0"

define delay tmax1
"tmax1 = td1*in1/2"
define delay tmax2
"tmax2 = td2*in2/2"  
define delay tmax3
"tmax3 = td3*in3/2"

"spoff4 = bf2*((cnst22 - cnst23)/1000000)"  ; CO with offset on CA/CO middle.
"spoff6 = spoff4"

define delay Tc
"Tc=d8"
;d8: delay for CCR relaxation measurement [28 msec]

; First INEPT Hz -> HzNz
define delay DELTA11
"DELTA11 = timeHN/2 - p16 - d16"

; Second INEPT HzNz -> COzNz
define delay DELTA21
define delay DELTA22
define delay DELTA23
"DELTA21 = timeNH"  ; H refocusing delay in second INEPT
"DELTA22 = timeNCO/2 - DELTA21 - p1 - d13*2"    ; Compensated for H 90 pulse.
"DELTA23 = timeNCO/2"

; COS-INEPT pulse train:
define delay DELTANandH
define delay DELTAHN1
define delay DELTAHN2
"DELTANandH = timeNandH/2 - p16 - d16"
"DELTAHN1 = timeHN/2 - p16 - d16 - p21"
"DELTAHN2 = timeHN/2 - p16 - d16"

define delay ECHOCOMP
"ECHOCOMP = p21*4/PI"

define delay ECHOTIME
"ECHOTIME = p16 + d16 + de - p1*2/PI"   ; Compensated for de and last pulse.

; ***** Run-time-calculated delays: *****

define delay T2aN
define delay T2aCA
define delay T2b
define delay T2c

define delay T3aCA
define delay T3aGRAD
define delay T3aCO
define delay T3b
define delay T3c

define delay tauA
define delay tauB

define delay maxtmax2
"maxtmax2=Tc-larger(p22,p14)*4-p16*8-d16*8"

 "acqt0 = 0" 
 baseopt_echo


; ***** Beginning of the pulse sequence *****

1 ze

2 d11  ; Start of loop.
; ***** Run-time calculations: *****


; poprawiona wersja deklaracji T3:
 "T3aCA = T3/2"
 "T3aCO = timeNCO/2 - p14"  ; Corrected for CA inversion pulse.
 "if (T3aCA < (p16+d16)) {T3aGRAD = T3aCA + p14;} else {T3aGRAD = 0;}"
 "if (tmax3 <= timeNCO) {T3b = 0;} else {T3b = T3*(1 - timeNCO/tmax3)/2;}"
 "if (tmax3 <= timeNCO) {T3c = (timeNCO - T3)/2 + p14;} else {T3c = timeNCO*(1 - T3/tmax3)/2 + p14;}" ; (T3c += p14 --> Compensate for length of CO inversion pulse)


    "tauA = (Tc+T2)/4"
    "tauB = (Tc-T2)/4"

    if "tmax2 >= maxtmax2" goto 999
    
    
    d1 fq=cnst23(bf ppm):f2 ; f2 to CA/CO middle

    d13 UNBLKGRAD   ; Unblank gradient amplifier and hold lock.

; Crush non-proton polarization:
    (p3 pl2 ph0):f2 
    (p21 pl3 ph0):f3 
    p16:gp0
    d16

    (p3 pl2 ph1):f2 
    (p21 pl3 ph1):f3 
    p16:gp0
    d16 fq=cnst22(bf ppm):f2    ; Switch f2 to CO.
    
; Hz -> HzNz:
    (p1 pl1 ph0):f1
    DELTA11
    p16:gp10
    d16
    (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
    DELTA11
    p16:gp10
    d16
    (p1 pl1 ph1):f1
    (p11:sp1 ph2):f1	; Water flipback.
    
		d13
    p16:gp1
    d16

; HzNz -> COzNz:
    (p21 pl3 ph0):f3
    DELTA21
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1
    DELTA22 
    (center (p14:sp3 ph0):f2 (p22 pl3 ph0):f3)
    DELTA23
    (p21 pl3 ph0):f3

; Decoupler OFF/ON and gradient.
    d13 do:f1
    (p1 pl1 ph3):f1
    p16:gp2
    d16
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1

; COzNz -> CAzCOzNz:
    d16 fq=cnst23(bf ppm):f2    ; Switch f2 to CA/CO middle.
    (p13:sp4 ph0):f2
    timeCOCA*0.5
       (shaka1 pl2 ph0):f2
       (shaka2 pl2 ph2):f2
       (shaka3 pl2 ph0):f2
       (shaka4 pl2 ph2):f2
       (shaka5 pl2 ph0):f2
       (shaka6 pl2 ph2):f2
    timeCOCA*0.5
    (p13:sp6 ph1):f2

    d16 fq=cnst21(bf ppm):f2 ; Switch f2 to CA.

; CA evolution (T1):
    (p13:sp2 ph11):f2
    T1*0.5
    (center (p14:sp7 ph0):f2 (p22 pl3 ph0):f3)	; CO and N inversion.
    T1*0.5
    (p14:sp3 ph0):f2	; CA refocussing.
    (p14:sp7 ph0):f2	; BSP compensation.
    (p13:sp8 ph0):f2

; Decoupler OFF and gradient.
    d13 do:f1
    (p1 pl1 ph3):f1
    (d13 fq=cnst22(bf ppm)):f2 ; Switch f2 to CO.
    p16:gp4
    d16

; CAzCOzNz -> CAzCOzNzHz

    (p21 pl3 ph0):f3
    timeNH*0.5
    (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
    timeNH*0.5
    (p21 pl3 ph1):f3

    d13
    p16:gp7
    d16

; CCR block with CO evol (T2) -> 'a': CAzCOzNzHz, 'x': CAzCOzNzHzHAz

    (center (p41:sp25 ph0):f1 (p13:sp2 ph12):f2)		;HN & CO 90 
    (center (tauA) (p14:sp5 ph0):f2  (p22 pl3 ph0):f3)	;tauA with N & CO 180 in the middle
    (p2 pl1 ph1):f1					;H (hard) 180
    (							;tauA with N & CO 180 in the middle and grad left
	refalign ( tauA )
	lalign ( p16:gp6 d16 )
	center (p14:sp5 ph2):f2
	center (p22 pl3 ph2):f3
    )
    (center (p42:sp26 ph10):f1 (p14:sp3 ph0):f2)		;HN & CO 180
    (							;tauB with N & CO 180 in the middle and grad right
	refalign ( tauB )
	ralign ( p16:gp6 d16 )
	center (p14:sp5 ph0):f2
	center (p22 pl3 ph0):f3
    )
    (p2 pl1 ph3):f1					;H (hard) 180
    (center (tauB) (p14:sp5 ph2):f2  (p22 pl3 ph2):f3)	;tauB with N & CO 180 in the middle
    if (l0==0)
    {
	(center (p41:sp27 ph0):f1 (p13:sp8 ph0):f2)		;HN & CO 90 - auto version
    }
    if (l0==1)
    {
	(center (p41:sp27 ph1):f1 (p13:sp8 ph1):f2)		;HN & CO 90 - cross version
    }

    (d13 fq=cnst21(bf ppm)):f2 ; Switch f2 to CA.

    d13
    p16:gp8
    d16

; CAzCOzNzHz(HAz) -> CAzCOzNz(HAz)

    (p21 pl3 ph0):f3
    timeNH*0.5
    (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
    timeNH*0.5
    (p21 pl3 ph1):f3

		d13
    p16:gp9
    d16

; CAzCOzNz(HAz) -> CAzCOzNz

    if (l0==0)
    {
	(p13:sp2 ph0):f2
	timeCaHa*0.5
	(p14:sp3 ph0):f2
	timeCaHa*0.5
	(p13:sp8 ph0):f2

        (p2 pl1 ph0):f1
    }
    if (l0==1)
    {
	(p13:sp2 ph0):f2
	timeCaHa*0.5
	(center (p2 pl1 ph0):f1 (p14:sp3 ph0):f2)
	timeCaHa*0.5
	(p13:sp8 ph1):f2
    }

		d13
    p16:gp10
    d16


; Decoupler ON
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1

; CAzCOzNz -> COzNz
    d16 fq=cnst23(bf ppm):f2    ; Switch f2 to CA/CO middle.
    (p13:sp4 ph0):f2
    timeCOCA*0.5
       (shaka1 pl2 ph0):f2
       (shaka2 pl2 ph2):f2
       (shaka3 pl2 ph0):f2
       (shaka4 pl2 ph2):f2
       (shaka5 pl2 ph0):f2
       (shaka6 pl2 ph2):f2
    timeCOCA*0.5
    (p13:sp6 ph1):f2


; Decoupler OFF/ON and gradient.
    d13 do:f1
    (p1 pl1 ph3):f1 (d13 fq=cnst22(bf ppm)):f2 ; Switch f2 to CO
    p16:gp5
    d16
    (p1 pl1 ph1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1

; COzNz -> HzNz + HzNx with N evolution (T3):
    (p21 pl3 ph21):f3
    T3c
    (p22 pl3 ph0):f3
    T3b
    (ralign
        (d13 do p1 pl1 ph3 timeNH):f1
        (p14:sp3 ph0 T3aCO p14:sp5 ph0 T3aCA):f2
        (p16:gp21*EA d16 T3aGRAD):f3
    )
    (p21 pl3 ph0):f3
    
; COS-INEPT:
    ECHOCOMP
    (p1 pl1 ph0):f1
    p16:gp11
    d16
    DELTANandH
    (center (p2 pl1 ph2):f1 (p22 pl3 ph0):f3)
    DELTANandH
    p16:gp11
    d16
    
    (p1 pl1 ph1):f1
    (p21 pl3 ph13):f3   ; E/A selecting pulse.
    p16:gp12
    d16
    DELTAHN1
    (center (p2 pl1 ph0):f1 (p22 pl3 ph0):f3)
    DELTAHN2
    p16:gp12
    d16

    (p1 pl1 ph0):f1
    ECHOTIME
    (p2 pl1 ph2):f1
    p16:gp22    ; Coherence selection gradient.
    
    d16 pl16:f3 BLKGRAD  ; Set power for decoupling, blank gradient amplifier and sample lock.

go=2 ph31 cpd3:f3 finally do:f3
d11 mc #0 to 2
	F1PH(calph(ph11,+90), caldel(T1, +in1))
	F2PH(calph(ph12,+90), caldel(T2, +in2))
	F3EA(calph(ph13,+180) & calgrad(EA), caldel(T3, +in3) & calph(ph21, +180) & calph(ph31, +180))
	
999 exit



; Constant phases:
ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3

ph10 = 0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
; Phases incremented for indirect dimensions:
ph11 = 0 2
ph12 = 0 0 2 2
ph13 = 3

; Phase at start of INEPT before COS-INEPT - for TPPI shifting in T3:
ph21 = 0

; Receiver phase:
ph31 = 0 2 2 0 2 0 0 2


;cnst19: HN offset in ppm [8.3]
;cnst18: HN bandwidth in ppm [3.5]

;sp25:wvm: pc9(cnst18 ppm, cnst19 ppm)
;sp26:wvm: reburp(cnst18 ppm, cnst19 ppm)
;sp27:wvm: pc9(cnst18 ppm, cnst19 ppm)

;l0: flag for auto (0) and cross (1) versions of the experiment
